// Check for GABAA conductance in synapse between two single passive
// compartments.
objref netcon, conobj, syn
objectvar vecT, vecV_a, vecV_b, stim1, vecG_a, vecG_b, outfile
outfile = new File()
vecV_a = new Vector()
vecV_b = new Vector()
vecG_a = new Vector()
vecG_b = new Vector()
vecT = new Vector()

FARADAY=96485
PI=3.141592
secondorder=2
dt=1e-3
celsius=30
v_init=-65

create soma_a
soma_a{
    nseg = 1
    diam = 15
    L = 20
    
    insert pas
    e_pas = -65
    g_pas = 2e-5
    Ra = 250.0
    cm = 0.9
    
    stim1 = new IClamp(0.5)
    stim1.amp = 0.1
    stim1.dur = 20.0
    stim1.del = 20
    e_gaba_a = -75.0
}

create soma_b
soma_b{
    nseg = 1
    diam = 15
    L = 20
    insert pas
    e_pas = -65
    g_pas = 2e-5
    Ra = 250.0
    cm = 0.9
    
    syn = new GABAA(0.5)
    syn.tau = 20.0 // ms    
    e_gaba_a = -75.0
    syn.e = e_gaba_a
}
// new NetCon(&source_v, synapse, threshold, delay, weight)
soma_a netcon = new NetCon(&v(0.5), syn, 0.0, 5.0, 0.01e-3)
// netcon.weight = 0.5e-3 // uS
// netcon.delay = 5.0 // ms
// netcon.threshold = 0.0

tstop = 1000
vecV_a.record(&soma_a.v(0.5))
vecV_b.record(&soma_b.v(0.5))
vecG_b.record(&syn.g)
vecT.record(&t)
run()
outfile.wopen("mydata/two_comp_gaba.plot")
outfile.printf("# time presynaptic_vm postsynaptic_vm synaptic_conductance\n")
for ii = 0, vecV_a.size() - 1 {
	outfile.printf("%g %g %g %g\n", vecT.x(ii)*1e-3, vecV_a.x(ii)*1e-3, vecV_b.x(ii)*1e-3, vecG_b.x(ii)*1e-6)
}
outfile.close()
quit()
