load_file("nrngui.hoc")
load_file("hoc/traubcon.hoc")
load_file("hoc/utility.hoc")
// load_file("fortmap.hoc")
load_file("cells/supLTS_template.hoc")
strdef tstr
PI=3.141592
FARADAY=96485
secondorder=2
dt = 1e-3
celsius=30
v_init = -65.0
//till the shift bug in the mod files are fixed (table depends on range variable)
// usetable_naf2 = 0
// usetable_naf = 0
// usetable_napf_spinstell = 0
// usetable_napf_tcr = 0

define_shape()
//objref runinfo_, choice_, cell, nil, stim1, stim2, mchoice_
objref cell, stim1, stim2
/* runcell(runtime, delay) */

proc runcell(){ local i, t1, a1, t2, a2 localobj vvec, tvec, f, g, caconc, ikvec
    tstop = $1
    t1 = $2
    printf("Run for: %g ms, stim at: %g\n", tstop, t1)
    t2 = 1e9 a2 = 0
    cell = new supLTS()
    access cell.comp[1]
    f = new File()
    tvec = new Vector()
    vvec = new Vector()
    caconc = new Vector()
    ikvec = new Vector()
    
    tvec.record(&t)
    vvec.record(&cell.comp[cell.presyn_comp].v(0.5))
    caconc.record(&cell.comp[1].cai(0.5))
    // ikvec.record(&cell.comp[1].ik_kc(0.5))
    stim1 = new IClamp(0.5) 
    stim1.amp = 0.3
    stim1.del = 50.0//t1
    stim1.dur = 50.0// $1 - $2
    forsec cell.all{
	// if (ismembrane("naf2")) { gbar_naf2 = 0.0 }
        // if (ismembrane("kc_fast")) { gbar_kc_fast = 0.0 }
	
	// if (ismembrane("kahp_slower")) { gbar_kahp_slower = 0.0}

        // if (ismembrane("km")) { gbar_km = 0.0 }
        // if (ismembrane("kdr_fs")) { gbar_kdr_fs = 0.0}
        // if (ismembrane("ka")) { gbar_ka = 0.0 }
        // if (ismembrane("k2")) { gbar_k2 = 0.0 }
	// if (ismembrane("cal")) { gbar_cal = 0.0 }
        // if (ismembrane("cat_a")) { gbar_cat_a = 0.0 }
    }
    print_cell(cell, "suppyrLTS")
    cell.comp[cell.presyn_comp] { print "### V = ", v(0.5) }    
    run()
    f.wopen("mydata/Vm_supLTS.plot")
    for ii = 0, vvec.size() - 1{
    	f.printf("%g %g\n", tvec.x(ii), vvec.x(ii))
    }
    f.close()
    f.wopen("mydata/Ca_supLTS.plot")
    for ii = 0, caconc.size() - 1{
    	f.printf("%g %g\n", tvec.x(ii), caconc.x(ii))
    }
    f.close()
}

proc finit0(){
    print "finit0"
    forsec cell.all { v = -70 }
}

runcell(200., 50.)
quit()
